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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Source:Signal%20Properties:DataIOFilter int SourceCh= 14 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 64 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 128 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 14 AF3 F7 F3 FC5 T7 P7 O1 O2 P8 T8 FC6 F4 F8 AF4 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 14 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 14 1 1 1 1 1 1 1 1 1 1 1 1 1 1 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= H:\sharif\projects\alireza\demo\data\psych\masih6_8_10_12_14_2 ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= masih Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 001 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Source%20Filter:SourceFilter int NotchFilter= 1 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter:SourceFilter int HighPassFilter= 1 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter:SourceFilter int LowPassFilter= 4 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 14 1 2 3 4 5 6 7 8 9 10 11 12 13 14 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 EmotivADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:FieldTrip%20Buffer:FieldTripBufferFilter string FTBufferAddress= localhost:1972 // Buffer listening address
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter matrix FTInitialOutput= 1 1 0 0 % % // Initial filter output (rows map to channels, columns map to elements)
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter string FTOutputEventType= Signal // Event type corresponding to output signal
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter stringlist FTStatesToBuffer= 5 * -Running -Recording -SourceTime -StimulusTime // States to be written as events to buffer (* to indicate any state; leading - to exclude; FTStatesFromBuffer are always excluded)
Filtering:FieldTrip%20Buffer:FieldTripBufferFilter stringlist FTStatesFromBuffer= 0 // States to be read as events from buffer
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 2 { Filter%20Name Position%20String } FieldTripBufferFilter 2.B ExpressionFilter 2.C // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
System:Randomization int RandomSeed= 15612 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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